PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'data/%s%s' % (expInfo['participant'], expName)
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save wide csv file = False
  Screen = 1
  Units = use prefs
  Use version = 2021.2.3
  Window size (pixels) = [1920, 1080]
  expName = EEGProtocolit
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Routines
  Routine StimMatch
    ImageComponent card1
      image [set every repeat] = $card1image
      pos = (-300, 200)
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent card2
      image [set every repeat] = $card2image
      pos = (-100, 200)
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent card3
      image [set every repeat] = $card3image
      pos = (100,200)
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent card4
      image [set every repeat] = $card4image
      pos = (300, 200)
      size = (150, 150)
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent SaveTCard
      image [set every repeat] = $stimcardimage
      pos = (0, -150)
      size = (200, 200)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent imagenumbers
      letterHeight = 50
      pos = (0, 85)
      startVal [time (s)] = 0.0
      text = 1            2            3            4
      units = pix
      wrapWidth = 900
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    KeyboardComponent ansmatch
      allowedKeys = '1','2','3','4'
      correctAns = $corrmatch
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent countans
      Code Type = Py
      Each Frame:
        if StimMatchClock.getTime() >= cardtime:
            continueRoutine = False
      End Routine:
        if not ansmatch.keys:
            noans += 1
        elif ansmatch.corr:
            ansc += 1
        else:
            answ += 1
    EmotivMarkingComponent MatchMarker
      durationEstim = 0.01
      marker_label = Stim
      marker_value = 2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      stop_marker = False
      syncScreenRefresh = False
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  Routine Finish
    TextComponent introFinish
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Grazie per la disponibilità!
    KeyboardComponent EndEXP
      allowedKeys = 'e'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroMatch
    TextComponent introMATCH
      color = black
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Si gioca!

        Usa la tastiera per selezionare una delle quattro carte mostrate sullo schermo in alto. Premi il numero corrispondente alla carta che corrisponde alla
        della carta mostrata in fondo allo schermo.
        Per ciascuna carta mostrata hai al massimo 3 secondi per decidere. Per sapere il tuo risultato devi attendere la fine del gioco

        Carta 1 – Premi 1
        Carta 2 – Premi 2
        Carta 3 – Premi 3
        Carta 4 – Premi 4

        Premi la BARRA SPAZIATRICE per cominciare
    CodeComponent code_matchintro
      Code Type = Py
      Begin Routine:
        introMATCH.alignText='left'
        if selectGame==1:
            matchfile = 'matchColor.xlsx'
            textmatch='Colore'
        if selectGame==2:
            matchfile = 'matchNum.xlsx'
            textmatch='Numero'
        if selectGame==3:
            matchfile = 'matchShape.xlsx'
            textmatch='Forma'
    TextComponent textMatch
      letterHeight = 0.07
      pos = (0.41, 0.275)
      startVal [time (s)] = 0.0
      text [set every repeat] = $textmatch
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    KeyboardComponent startMatch
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    EmotivMarkingComponent IntroGame
      durationEstim = 0.01
      marker_label = I
      marker_value = 1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      stop_marker = False
      syncScreenRefresh = False
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  Routine MatchResult
    EmotivMarkingComponent GameEndMarker
      durationEstim = 0.5
      marker_label = End
      marker_value = 9
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      stop_marker = False
      syncScreenRefresh = False
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        msg = "Corrette : %i   \nSbagliate  : %i   \nIn ritardo: %i \n\n\n\nPremi la BARRA SPAZIATRICE per continuare" %(ansc,answ,noans)
      End Routine:
        #reset these numbers so next repeat can count from 0
        ansc = 0
        answ = 0
        noans = 0
    TextComponent SaveTMatchR
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
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    KeyboardComponent Next
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GameStartMarker
    EmotivMarkingComponent GameStart
      durationEstim = 0.5
      marker_label = GStart
      marker_value = 7
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      stop_marker = False
      syncScreenRefresh = False
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  Routine MovementRecording
    EmotivMarkingComponent eeg_marker
      durationEstim = 0.5
      marker_label = Baseline
      marker_value = 8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      stop_marker = False
      syncScreenRefresh = False
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    TextComponent Cross
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $durMove
      text [set every repeat] = $CrossText
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    KeyboardComponent skip_thisRecording
      allowedKeys = 'n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $durMove
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = $durMove
      stopVal [duration (s)] = 0.5
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    EmotivMarkingComponent eeg_marker_end
      durationEstim = 0.5
      marker_label = End
      marker_value = 9
      startVal [time (s)] = $durMove
      stopVal [duration (s)] = 0.5
      stop_marker = False
      syncScreenRefresh = False
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  Routine IntroPrep
    CodeComponent Code_Prep
      Code Type = Py
      Begin Routine:
        msg = "doh"
        texti = "doh"

        ansc = 0
        answ = 0
        noans = 0

        cardtime = 3 #3s
    EmotivRecordingComponent Cortex_rec
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      syncScreenRefresh = False
  Routine SelectMovement
    CodeComponent code_SelectMove
      Code Type = Py
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      Begin Routine:
        durMove=15
        CrossText="+"
        if Movementi==1:
            texti="Keep your eyes open naturaly for 15s"
        elif Movementi ==2:
            texti="Keep your eyes close for 15s"
        elif Movementi ==3:
            texti="Keep opening your eyes without blinking for 15s"
        elif Movementi ==4:
            texti="Keep continuously blinking for 15s"
        elif Movementi ==5:
            texti="Continues horizontal eyemovement for 15s"
        elif Movementi ==6:
            texti="Continues vertical eyemovement for 15s"
        elif Movementi ==7:
            texti="Continues neck movement of YES for 15s"
        elif Movementi ==8:
            texti="Continues neck movement of NO for 15s"
        elif Movementi ==9:
            texti="Continues neck movement of WHAT for 15s"
        elif Movementi ==10:
            texti="Wrtie down silently the movements you just did for 15s"
        elif Movementi ==11:
            texti="Write while speak, what did you eat last night for 15s"
        elif Movementi ==12:
            texti="Talk in two for 60s"
            durMove=60
        elif Movementi ==13:
            texti="Read the following text for 15s"
            CrossText="Researchers must read papers for several reasons: to review them for a conference or a class, to keep current in their field, or for a literature survey of a new field. A typical researcher will likely spend hundreds of hours every year reading papers. Learning to efficiently read a paper is a critical but rarelytaught skill. Beginning graduate students, therefore, must learn on their own using trial and error. Students waste much effort in the process and are frequently driven to frustration. For many years I have used a simple approach to efficiently read papers. This paper describes the ‘three-pass’ approach and its use in doing a literature survey."
        elif Movementi ==14:
            texti="Sketch sth in your mind for 60s"
            durMove=60
        elif Movementi ==15:
            texti="Walk for 30s"
            durMove=30
  Routine MovementInfo
    TextComponent MovementRequest
      letterHeight = 0.08
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $texti
    KeyboardComponent startmovement
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine IntroPrep
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Movements.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Movementi': 1},
      {'Movementi': 2},
      {'Movementi': 3},
      {'Movementi': 4},
      {'Movementi': 5},
      {'Movementi': 6},
      {'Movementi': 7},
      {'Movementi': 8},
      {'Movementi': 9},
      {'Movementi': 10},
      {'Movementi': 11},
      {'Movementi': 12},
      {'Movementi': 13},
      {'Movementi': 14},
      {'Movementi': 15}]
    Routine SelectMovement
    Routine MovementInfo
    Routine MovementRecording
  LoopTerminator trials
  LoopInitiator GameTypeChanges loopType="TrialHandler"
    conditionsFile = randGame.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'selectGame': 1},
      {'selectGame': 2},
      {'selectGame': 3}]
    Routine IntroMatch
    Routine GameStartMarker
    LoopInitiator MatchGame loopType="TrialHandler"
      conditionsFile = $matchfile
      loopType = random
      nReps = 1
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      Routine StimMatch
    LoopTerminator MatchGame
    Routine MatchResult
  LoopTerminator GameTypeChanges
  Routine Finish
